WorkflowBuilder(Version=2.9.0)
GroupWorkflow Camera
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #1
    ExternalizedMapping(SerialNumber(DisplayName=CameraSeriaNumber)) => #2
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.Exposure)
    -> PropertyMapping(ExposureTime) => #5
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.Gain)
    -> PropertyMapping(Gain) => #8
    #1, #2, #5, #8 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=24282626, ColorProcessing=Default, ExposureTime=15000, Gain=10, Binning=1, TriggerSource=Line3)
    -> PublishSubject CameraStream
    -> WorkflowOutput

GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\temp, ChunkSize=1)

    SubscribeSubject SessionSettings => #4
    SubscribeSubject BehaviorEvents => #5
    #4, #5 -> SubscribeWhen
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject CurrentSequences => #10
    SubscribeSubject BehaviorEvents => #11
    #10, #11 -> SubscribeWhen
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Schema)
    -> Take(Count=1)

    Disable SubscribeSubject EegStream
    -> Disable IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=EegStreamEvents, Selector=nil)

    SubscribeSubject EventsO0
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer0, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject EventsO1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer1, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Behavior, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject ExperimentEvents
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=ExperimentEvents, Selector=nil)

    SubscribeSubject BehaviorCommands
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorCommands, Selector=nil)

    SubscribeSubject CameraStream => #31
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.FrameRate)
    -> PropertyMapping(FrameRate) => #34
    #31, #34 -> IncludeWorkflow(Path=Aeon.Video:LogVideo.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=VideoData, FrameRate=60)

    SubscribeSubject BehaviorNotifications
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorNotifications, Selector=nil)

    SubscribeSubject DetectedObject
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=DetectedObject, Selector=nil)

GroupWorkflow Behavior
    Disable BehaviorSubject<Bonsai.Harp.HarpMessage> FilteredCommands => #0
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #1
    #0, #1 -> CreateObservable RateLimiter
        WorkflowInput Source1
        -> BehaviorSubject Element

        SubscribeSubject Element => #2
        ExternalizedMapping(DueTime(DisplayName=MinInterval))
        -> Timer(DueTime=PT0.005S) => #4
        #2, #4 -> TakeUntil
        -> WorkflowOutput
    -> Concat => #3
    ExternalizedMapping(PortName) => #4
    #3, #4 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM5) => #5
    -> PublishSubject BehaviorEvents
    -> WorkflowOutput
    #5 -> Last
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> PublishSubject BehaviorNotifications

    Disable BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
    -> Disable CreateObservable RateLimiter
        WorkflowInput Source1 => #0
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData) => #2
        #0, #2 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Disable Concat
    -> Disable MulticastSubject FilteredCommands

    BooleanProperty(Value=false)
    -> BehaviorSubject CurrentSampleState

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.PortDIOStateEvent) => #18
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO1))
    -> DistinctUntilChanged
    -> PublishSubject DI0
    #18 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO2))
    -> DistinctUntilChanged
    -> PublishSubject DI1

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #26
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #28
    #26 -> MemberSelector(Selector=Seconds) => #29
    #28, #29 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> DistinctUntilChanged => #32
    -> Condition Onset
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> WorkflowOutput
    -> PublishSubject SampleOnset
    #32 -> Condition Offset
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> WorkflowOutput
    -> PublishSubject SampleOffset

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=2))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RewardPort0

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=4))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RewardPort1

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort1))
    -> Delay(DueTime=PT1S) => #50
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort2))
    -> Delay(DueTime=PT1S) => #52
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
    -> Delay(DueTime=PT1.5S) => #54
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0"))
    -> Delay(DueTime=PT1.5S) => #56
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePokeInputFilterPayload(PokeInputFilter=30))
    -> Delay(DueTime=PT2S) => #58
    #50, #52, #54, #56, #58 -> Concat
    -> MulticastSubject BehaviorCommands

    BehaviorSubject<DataSchema.RewardCommand> RewardCommand
    -> SelectMany Reward
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Command

        SubscribeSubject Command
        -> Condition RewardLocation1 => #4
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Command
        -> MemberSelector(Selector=RewardTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(PulseSupplyPort1) => #8
        #4, #8 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort1Payload(PulseSupplyPort1=130))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
        -> MulticastSubject BehaviorCommands => #12
        SubscribeSubject Command
        -> Condition RewardLocation2 => #14
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject Command
        -> MemberSelector(Selector=RewardTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(PulseSupplyPort2) => #18
        #14, #18 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort2Payload(PulseSupplyPort2=130))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
        -> MulticastSubject BehaviorCommands => #22
        #12, #22 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput

IncludeWorkflow
  Path=Extensions\Olfactometer.bonsai
  PortO0=COM7
  EventsO0=EventsO0
  PortO1=COM3
  EventsO1=EventsO1
  OlfactometerEvents=OlfactometerEvents
  SessionSettings=SessionSettings
  OlfactometerCommand=OlfactometerCommand

Disable GroupWorkflow EEG
    UdpSource(GroupAddress=239.255.76.67, Port=8866)
    -> PublishSubject EegStream
    -> WorkflowOutput

GroupWorkflow Tracking
    SubscribeSubject CameraStream
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=40, MaxValue=255, ThresholdType=BinaryInv) => #3
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties)
    -> MemberSelector(Selector=RoiSourcePoints)
    -> MemberSelector(Selector=Points)
    -> ConvertPoints
    -> PropertyMapping(Regions) => #9
    #3, #9 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=210, Y=600), Point(X=210, Y=700), Point(X=1070, Y=700), Point(X=1070, Y=600))), Operation=Sum)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> Take(Count=15)
    -> Average
    -> Repeat
    -> BehaviorSubject RoiMovingAverage

    SubscribeSubject CameraStream
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=40, MaxValue=255, ThresholdType=BinaryInv) => #20
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties)
    -> MemberSelector(Selector=RoiSourcePoints)
    -> MemberSelector(Selector=Points)
    -> ConvertPoints
    -> PropertyMapping(Regions) => #26
    #20, #26 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=210, Y=600), Point(X=210, Y=700), Point(X=1070, Y=700), Point(X=1070, Y=600))), Operation=Sum)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> BehaviorSubject RoiIntensity

    SubscribeSubject RoiIntensity => #31
    SubscribeSubject RoiMovingAverage => #32
    #31, #32 -> WithLatestFrom
    -> Divide => #34
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties)
    -> MemberSelector(Selector=Threshold)
    -> PropertyMapping(Value) => #38
    #34, #38 -> GreaterThan(Operand=DoubleProperty(Value=3))
    -> PublishSubject DetectedObject

ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
-> LoadSessionSettings(Path=Schemas\rig3-session-settings.yml)
-> Take(Count=1)
-> AsyncSubject SessionSettings

SubscribeSubject SessionSettings
-> MemberSelector(Selector=Metadata.InitialSequence) => #11
BehaviorSubject<System.String> LoadNewSequence => #12
#11, #12 -> Merge
-> SelectMany LoadSequence
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject Path

    SubscribeSubject Path
    -> PropertyMapping(Path)
    -> SequenceSelector(Path=Schemas/odourdiscrimination-stage4.yml)
    -> Take(Count=1)
    -> WorkflowOutput
-> BehaviorSubject CurrentSequences

Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)

Bonsai.Numerics.CreateRandom(Seed=nil)
-> BehaviorSubject RandomSource

ExternalizedMapping(Filter(DisplayName=StartCameraKey))
-> Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #20
SubscribeSubject SessionSettings
-> MemberSelector(Selector=CameraProperties.FrameRate)
-> PropertyMapping(Camera0Frequency) => #23
#20, #23 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=60))
-> MulticastSubject BehaviorCommands
-> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
-> MulticastSubject BehaviorCommands

GroupWorkflow SustainedPokes
    SubscribeSubject SampleOnset => #0
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.MinimumSampleTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #4
    #0, #4 -> Delay(DueTime=PT0.05S) => #5
    SubscribeSubject SampleOffset => #6
    #5, #6 -> TakeUntil
    -> Repeat
    -> PublishSubject SustainedSampleOnset

    SubscribeSubject SampleOffset => #10
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.SampleOffsetTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #14
    #10, #14 -> Delay(DueTime=PT0.2S) => #15
    SubscribeSubject SampleOnset => #16
    #15, #16 -> TakeUntil
    -> Repeat
    -> PublishSubject SustainedSampleOffset

    SubscribeSubject SustainedSampleOnset => #20
    -> BooleanProperty(Value=true) => #21
    #20 -> MemberSelector(Selector=Seconds) => #22
    #21, #22 -> Zip
    -> Bonsai.Harp.CreateTimestamped => #24
    SubscribeSubject SustainedSampleOffset => #25
    -> BooleanProperty(Value=false) => #26
    #25 -> MemberSelector(Selector=Seconds) => #27
    #26, #27 -> Zip
    -> Bonsai.Harp.CreateTimestamped => #29
    #24, #29 -> Merge
    -> BehaviorSubject SustainedSampleState

BehaviorSubject<System.Boolean> TrialCorrectResult
-> Bonsai.Scripting.Expressions.ExpressionTransform => #30
  Expression: Convert.ToInt32(it)
SubscribeSubject SessionSettings
-> MemberSelector(Selector=Metadata.PerformanceAverageWindow)
-> PropertyMapping(Count) => #33
#30, #33 -> Bonsai.Dsp.Buffer(Count=5, Skip=1)
-> Bonsai.Dsp.Average => #35
SubscribeSubject CurrentSequences
-> Skip(Count=1) => #37
#35, #37 -> TakeUntil
-> Repeat
-> BehaviorSubject PerformanceAverage

SubscribeSubject CurrentSequences
-> Take(Count=1)
-> MemberSelector(Selector=Sequences)
-> Merge
-> CreateObservable SequenceProgression
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SequenceSelections

    SubscribeSubject SequenceSelections
    -> Sink SetDefault
        WorkflowInput Source1
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand
        -> WorkflowOutput
    -> SelectMany ChooseRandomSequence => #5
        WorkflowInput Source1 => #0
        -> UniformSampleList => #1
        #0 -> StringProperty(Value=ChooseRandomSequence)
        -> MulticastSubject ExperimentEvents => #3
        #1, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany SampleRewardCondition => #6
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardConditions)
        -> Take(Count=1)
        -> AsyncSubject RewardConditions
        -> StringProperty(Value=SampleRewardCondition)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject RandomSource => #6
        SubscribeSubject RewardConditions
        -> MemberSelector(Selector=Count)
        -> Subtract(Operand=IntProperty(Value=1))
        -> PropertyMapping(Upper) => #10
        #6, #10 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
        -> Bonsai.Numerics.Distributions.Sample
        -> Take(Count=1)
        -> WorkflowOutput
    #6, #5 -> Zip
    -> SelectMany InitiationSequence
        WorkflowInput Source1
        -> Take(Count=1)
        -> Disable Sink EnableTrialStartIndicator
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.EnableTrialStartIndicator)
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput
        -> AsyncSubject SequenceInfo
        -> StringProperty(Value=InitiationSequence)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject SequenceInfo => #6
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.RewardConditions)
        -> Index(Operand=IntProperty(Value=0)) => #9
        #6 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.RewardConditions)
        -> Index(Operand=IntProperty(Value=1)) => #12
        #9, #12 -> Merge => #13
        -> Take(Count=1)
        -> MemberSelector(Selector=Definition) => #15
        -> Merge
        -> UniformSampleList => #17
        #13 -> MemberSelector(Selector=Position) => #18
        #17, #18 -> WithLatestFrom
        -> Disable CreateObservable SimpleStimulus
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Valence

            SubscribeSubject BehaviorEvents => #3
            SubscribeSubject SustainedSampleState
            -> MemberSelector(Selector=Value) => #5
            #3, #5 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Take(Count=1)
            -> AsyncSubject AlreadySampling

            SubscribeSubject SustainedSampleOnset => #11
            -> BooleanProperty(Value=true) => #12
            #11 -> MemberSelector(Selector=Seconds) => #13
            #12, #13 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #15
            SubscribeSubject AlreadySampling
            -> Condition AlreadySampling => #17
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            #15, #17 -> Merge
            -> Take(Count=1)
            -> AsyncSubject InitiatingOnset

            SubscribeSubject Valence
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=Command)
            -> MulticastSubject OlfactometerCommand
            -> Delay(DueTime=PT1S) => #25
            -> BooleanProperty(Value=true) => #26
            #25 -> BooleanProperty(Value=true) => #27
            #26, #27 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #29
              Expression:
                new (
                  it.Item1 as Disengaged,
                  it.Item2 as Valid
                )
            SubscribeSubject Valence => #30
            #29, #30 -> WithLatestFrom
            -> Take(Count=1)
            -> WorkflowOutput
        -> CreateObservable NewPresentStimulus
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Valence

            Disable SubscribeSubject BehaviorEvents => #3
            Disable SubscribeSubject SustainedSampleState
            -> Disable MemberSelector(Selector=Value) => #5
            #3, #5 -> Disable WithLatestFrom
            -> Disable MemberSelector(Selector=Item2)
            -> Disable IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Disable Take(Count=1)
            -> Disable AsyncSubject AlreadySampling

            SubscribeSubject SustainedSampleState
            -> Take(Count=1)
            -> AsyncSubject AlreadySampling

            SubscribeSubject SustainedSampleOnset => #14
            -> BooleanProperty(Value=true) => #15
            #14 -> MemberSelector(Selector=Seconds) => #16
            #15, #16 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #18
            SubscribeSubject AlreadySampling
            -> Condition AlreadySampling => #20
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            #18, #20 -> Merge
            -> Take(Count=1)
            -> AsyncSubject InitiatingOnset

            SubscribeSubject InitiatingOnset => #24
            SubscribeSubject Valence => #25
            #24, #25 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Item1.Command)
            -> MulticastSubject OlfactometerCommand => #28
            SubscribeSubject Valence
            -> MemberSelector(Selector=Item1.MaximumSamplingTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #32
            #28, #32 -> Delay(DueTime=PT1S) => #33
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommand)
            -> PropertyMapping(Value) => #36
            #33, #36 -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand => #38
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommandTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #42
            #38, #42 -> Delay(DueTime=PT0.2S) => #43
            -> BooleanProperty(Value=true) => #44
            #43 -> BooleanProperty(Value=false) => #45
            #44, #45 -> Zip => #46
            SubscribeSubject SustainedSampleOffset
            -> MemberSelector(Selector=Seconds) => #48
            SubscribeSubject InitiatingOnset
            -> MemberSelector(Selector=Seconds) => #50
            #48, #50 -> WithLatestFrom
            -> Subtract => #52
            -> Condition LessThanMinimum => #53
                WorkflowInput Source1 => #0
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MinimumSamplingTime)
                -> PropertyMapping(Value) => #3
                #0, #3 -> LessThan(Operand=DoubleProperty(Value=0.25))
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #54
            #53 -> BooleanProperty(Value=false) => #55
            #54, #55 -> Zip => #56
            #52 -> Condition WithinSamplingPeriod => #57
                WorkflowInput Source1 => #0
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MinimumSamplingTime)
                -> PropertyMapping(Value) => #3
                #0, #3 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.25)) => #4
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MaximumSamplingTime)
                -> Add(Operand=DoubleProperty(Value=0.1))
                -> PropertyMapping(Value) => #8
                #8, #0 -> LessThan(Operand=DoubleProperty(Value=1.1)) => #9
                #4, #9 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #58
            #57 -> BooleanProperty(Value=false) => #59
            #58, #59 -> Zip => #60
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommandTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #64
            #60, #64 -> Delay(DueTime=PT0.2S) => #65
            #46, #56, #65 -> Merge => #66
            SubscribeSubject Valence => #67
            #66, #67 -> WithLatestFrom
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable CreateObservable PresentStimulus => #22
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Valence

            SubscribeSubject BehaviorEvents => #3
            SubscribeSubject SustainedSampleState
            -> MemberSelector(Selector=Value) => #5
            #3, #5 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Take(Count=1)
            -> AsyncSubject AlreadySampling

            SubscribeSubject SustainedSampleOnset => #11
            -> BooleanProperty(Value=true) => #12
            #11 -> MemberSelector(Selector=Seconds) => #13
            #12, #13 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #15
            SubscribeSubject AlreadySampling
            -> Condition AlreadySampling => #17
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            #15, #17 -> Merge
            -> Take(Count=1)
            -> AsyncSubject InitiatingOnset

            SubscribeSubject SustainedSampleState
            -> Condition => #22
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            SubscribeSubject SustainedSampleOffset
            -> MemberSelector(Selector=Seconds) => #24
            SubscribeSubject InitiatingOnset
            -> MemberSelector(Selector=Seconds) => #26
            #24, #26 -> WithLatestFrom
            -> Subtract
            -> LessThan(Operand=DoubleProperty(Value=0))
            -> Condition => #30
                WorkflowInput Source1
                -> WorkflowOutput
            #22, #30 -> WithLatestFrom
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> AsyncSubject ReinitiatingOnset
            SubscribeSubject InitiatingOnset => #35
            SubscribeSubject Valence => #36
            #35, #36 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Item1.Command)
            -> MulticastSubject OlfactometerCommand => #39
            SubscribeSubject Valence
            -> MemberSelector(Selector=Item1.MaximumSamplingTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #43
            #39, #43 -> Delay(DueTime=PT1S) => #44
            #44, #30 -> TakeUntil => #45
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommand)
            -> PropertyMapping(Value) => #48
            #45, #48 -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand => #50
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommandTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #54
            #50, #54 -> Delay(DueTime=PT0.2S) => #55
            -> BooleanProperty(Value=false) => #56
            #55 -> BooleanProperty(Value=true) => #57
            #56, #57 -> Zip => #58
            SubscribeSubject SustainedSampleOffset
            -> MemberSelector(Selector=Seconds) => #60
            SubscribeSubject InitiatingOnset
            -> MemberSelector(Selector=Seconds) => #62
            #60, #62 -> WithLatestFrom
            -> Subtract => #64
            #64, #30 -> TakeUntil => #65
            -> Condition WithinSamplingPeriod => #66
                WorkflowInput Source1 => #0
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MinimumSamplingTime)
                -> PropertyMapping(Value) => #3
                #0, #3 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.25)) => #4
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MaximumSamplingTime)
                -> Add(Operand=DoubleProperty(Value=0.1))
                -> PropertyMapping(Value) => #8
                #8, #0 -> LessThan(Operand=DoubleProperty(Value=1.1)) => #9
                #4, #9 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            #58, #66 -> TakeUntil
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #68
              Expression:
                new (
                  it.Item1 as Disengaged,
                  it.Item2 as Valid
                )
            #66 -> BooleanProperty(Value=true) => #69
            #66 -> BooleanProperty(Value=true) => #70
            #69, #70 -> Zip => #71
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommandTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #75
            #71, #75 -> Delay(DueTime=PT0.2S)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #77
              Expression:
                new (
                  it.Item1 as Disengaged,
                  it.Item2 as Valid
                )
            #65 -> Condition LessThanMinimum => #78
                WorkflowInput Source1 => #0
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MinimumSamplingTime)
                -> PropertyMapping(Value) => #3
                #0, #3 -> LessThan(Operand=DoubleProperty(Value=0.25)) => #4
                #0 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0)) => #5
                #4, #5 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #79
            #78 -> BooleanProperty(Value=false) => #80
            #79, #80 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #82
              Expression:
                new (
                  it.Item1 as Disengaged,
                  it.Item2 as Valid
                )
            SubscribeSubject ReinitiatingOnset => #83
            SubscribeSubject Valence => #84
            #83, #84 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Item1.Command)
            -> MulticastSubject OlfactometerCommand => #87
            SubscribeSubject Valence
            -> MemberSelector(Selector=Item1.MaximumSamplingTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #91
            #87, #91 -> Delay(DueTime=PT1S) => #92
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommand)
            -> PropertyMapping(Value) => #95
            #92, #95 -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand => #97
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommandTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #101
            #97, #101 -> Delay(DueTime=PT0.2S) => #102
            -> BooleanProperty(Value=false) => #103
            #102 -> BooleanProperty(Value=true) => #104
            #103, #104 -> Zip => #105
            SubscribeSubject SustainedSampleOffset
            -> MemberSelector(Selector=Seconds) => #107
            SubscribeSubject ReinitiatingOnset
            -> MemberSelector(Selector=Seconds) => #109
            #107, #109 -> WithLatestFrom
            -> Subtract => #111
            -> Condition WithinSamplingPeriod => #112
                WorkflowInput Source1 => #0
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MinimumSamplingTime)
                -> PropertyMapping(Value) => #3
                #0, #3 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.25)) => #4
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MaximumSamplingTime)
                -> Add(Operand=DoubleProperty(Value=0.1))
                -> PropertyMapping(Value) => #8
                #8, #0 -> LessThan(Operand=DoubleProperty(Value=1.1)) => #9
                #4, #9 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            #105, #112 -> TakeUntil
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #114
              Expression:
                new (
                  it.Item1 as Disengaged,
                  it.Item2 as Valid
                )
            #112 -> BooleanProperty(Value=true) => #115
            #112 -> BooleanProperty(Value=true) => #116
            #115, #116 -> Zip => #117
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommandTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #121
            #117, #121 -> Delay(DueTime=PT0.2S)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #123
              Expression:
                new (
                  it.Item1 as Disengaged,
                  it.Item2 as Valid
                )
            #111 -> Condition LessThanMinimum => #124
                WorkflowInput Source1 => #0
                SubscribeSubject Valence
                -> MemberSelector(Selector=Item1.MinimumSamplingTime)
                -> PropertyMapping(Value) => #3
                #0, #3 -> LessThan(Operand=DoubleProperty(Value=0.25)) => #4
                #0 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0)) => #5
                #4, #5 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #125
            #124 -> BooleanProperty(Value=false) => #126
            #125, #126 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #128
              Expression:
                new (
                  it.Item1 as Disengaged,
                  it.Item2 as Valid
                )
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.MaximumInterOdourPokeTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2S) => #133
            SubscribeSubject SustainedSampleState => #134
            #133, #134 -> WithLatestFrom
            -> Condition FailedToSample => #136
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> MemberSelector(Selector=Value)
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #137
            #136 -> BooleanProperty(Value=false) => #138
            #137, #138 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #140
              Expression:
                new (
                  it.Item1 as Disengaged,
                  it.Item2 as Valid
                )
            #68, #77, #82, #114, #123, #128, #140 -> Merge
            -> Take(Count=1) => #142
            SubscribeSubject Valence => #143
            #142, #143 -> WithLatestFrom
            -> WorkflowOutput
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommand)
            -> PropertyMapping(Value) => #148
            #30, #148 -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommand)
            -> PropertyMapping(Value) => #153
            #71, #153 -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommand)
            -> PropertyMapping(Value) => #158
            #117, #158 -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand
        #15 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #24
        #22, #24 -> Take(Count=1)
        -> ToList => #26
        SubscribeSubject SustainedSampleOnset => #27
        #26, #27 -> SubscribeWhen
        -> Merge
        -> Concat
        -> Take(Count=1)
        -> Repeat

        Disable BehaviorSubject<System.Tuple(System.Tuple(System.Boolean,System.Boolean),System.Tuple(SequenceSchema.Valence,System.Int32))> SequenceComplete
        Disable BehaviorSubject<System.Tuple(System.Tuple(System.Boolean,System.Boolean),System.Tuple(SequenceSchema.Valence,System.Int32))> PresentationResult

        Disable SubscribeSubject StimulusPresentations => #35
        Disable SubscribeSubject SustainedSampleOnset => #36
        #35, #36 -> Disable SubscribeWhen
        -> Disable Merge
        -> Disable Concat => #39
        -> Disable Last
        -> Disable Condition SequenceCompleteCheck
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Item1)
            -> BitwiseNot => #2
            #0 -> MemberSelector(Selector=Item1.Item2) => #3
            #2, #3 -> Zip
            -> BitwiseAnd => #5
            #0 -> MemberSelector(Selector=Item1.Item1) => #6
            #0 -> MemberSelector(Selector=Item1.Item2) => #7
            #6, #7 -> Zip
            -> BitwiseAnd => #9
            #5, #9 -> Zip
            -> BitwiseOr => #11
            #0 -> MemberSelector(Selector=Item2.Item1.Index) => #12
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.SequenceLengthIndex) => #14
            #12, #14 -> WithLatestFrom
            -> Subtract
            -> Equal(Operand=IntProperty(Value=0)) => #17
            #11, #17 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> Disable MulticastSubject SequenceComplete => #42
        #39, #42 -> Disable Merge
        -> Disable MulticastSubject PresentationResult => #44
        -> Disable Condition IsIncomplete
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable StringProperty(Value=Purge)
        -> Disable MulticastSubject OlfactometerCommand
        -> Disable Delay(DueTime=PT0.5S) => #48
        #44, #48 -> Disable TakeUntil => #49
        Disable SubscribeSubject SequenceInfo
        -> Disable Sink EnableTrialStartIndicator => #51
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.EnableTrialStartIndicator)
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput
        #49, #51 -> Disable WithLatestFrom
        -> Disable Repeat

        Disable SubscribeSubject PresentationResult
        -> Disable MemberSelector(Selector=Item2.Item1.Index)
        -> Disable Equal(Operand=IntProperty(Value=0))
        -> Disable BitwiseNot => #57
        Disable SubscribeSubject PresentationResult => #58
        -> Disable MemberSelector(Selector=Item1.Item1) => #59
        #58 -> Disable MemberSelector(Selector=Item1.Item2)
        -> Disable BitwiseNot => #61
        #59, #61 -> Disable Zip
        -> Disable BitwiseAnd => #63
        #57, #63 -> Disable Zip
        -> Disable BitwiseAnd => #65
        Disable SubscribeSubject SequenceInfo
        -> Disable MemberSelector(Selector=Item2.CompletionRequiresEngagement)
        -> Disable BitwiseNot => #68
        #65, #68 -> Disable WithLatestFrom
        -> Disable BitwiseAnd
        -> Disable Condition CompletionConditionsMet => #71
            WorkflowInput Source1
            -> WorkflowOutput
        Disable SubscribeSubject PresentationResult => #72
        #71, #72 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #74
        Disable SubscribeSubject SequenceInfo
        -> Disable MemberSelector(Selector=Item2) => #76
        #74, #76 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #78
          Expression:
            new (
            it.Item1.Item2 as RewardInfo,
            it.Item2 as Sequence,
            it.Item1.Item1.Item1 as TrialComplete
            )
        Disable SubscribeSubject SequenceInfo => #79
        -> Disable Condition SkipSampling
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.SkipSampling)
            -> WorkflowOutput
        -> Disable MemberSelector(Selector=Item2.RewardConditions) => #81
        #79 -> Disable MemberSelector(Selector=Item1)
        -> Disable PropertyMapping(Value) => #83
        #81, #83 -> Disable Index(Operand=IntProperty(Value=0)) => #84
        -> Disable SequenceSchema.Valence(Rewarded=true, MinimumSamplingTime=0, MaximumSamplingTime=0, Index=0) => #85
        #84 -> Disable MemberSelector(Selector=Position) => #86
        #85, #86 -> Disable Zip => #87
        Disable SubscribeSubject SequenceInfo
        -> Disable MemberSelector(Selector=Item2) => #89
        #87, #89 -> Disable WithLatestFrom => #90
        Disable BooleanProperty(Value=true) => #91
        #90, #91 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #93
          Expression:
            new (
            it.Item1.Item1 as RewardInfo,
            it.Item1.Item2 as Sequence,
            it.Item2 as TrialComplete
            )
        Disable SubscribeSubject SequenceComplete
        -> Disable MemberSelector(Selector=Item2) => #95
        Disable SubscribeSubject SequenceInfo
        -> Disable MemberSelector(Selector=Item2) => #97
        #95, #97 -> Disable WithLatestFrom => #98
        Disable BooleanProperty(Value=true) => #99
        #98, #99 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #101
          Expression:
            new (
            it.Item1.Item1 as RewardInfo,
            it.Item1.Item2 as Sequence,
            it.Item2 as TrialComplete
            )
        Disable SubscribeSubject DetectedObject
        -> Disable Condition => #103
            WorkflowInput Source1
            -> WorkflowOutput
        Disable SubscribeSubject PresentationResult => #104
        -> Disable MemberSelector(Selector=Result.Disengaged) => #105
        #104 -> Disable MemberSelector(Selector=Result.Valid) => #106
        #105, #106 -> Disable Zip
        -> Disable BitwiseAnd => #108
        Disable SubscribeSubject PresentationResult
        -> Disable MemberSelector(Selector=Valence.Item1.Rewarded) => #110
        #108, #110 -> Disable WithLatestFrom
        -> Disable BitwiseAnd => #112
        #103, #112 -> Disable WithLatestFrom
        -> Disable BitwiseAnd
        -> Disable Condition MidsequenceCompletionConditionsMet => #115
            WorkflowInput Source1
            -> WorkflowOutput
        Disable SubscribeSubject PresentationResult => #116
        #115, #116 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2.Valence) => #118
        Disable SubscribeSubject SequenceInfo
        -> Disable MemberSelector(Selector=Item2) => #120
        #118, #120 -> Disable WithLatestFrom => #121
        Disable BooleanProperty(Value=true) => #122
        #121, #122 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #124
          Expression:
            new (
            it.Item1.Item1 as RewardInfo,
            it.Item1.Item2 as Sequence,
            it.Item2 as TrialComplete
            )
        #78, #93, #101, #124 -> Disable Merge => #125
        Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false) => #126
        -> SequenceSchema.Valence(Rewarded=true, MinimumSamplingTime=0, MaximumSamplingTime=0, Index=0) => #127
        #126 -> IntProperty(Value=0) => #128
        #127, #128 -> Zip => #129
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2) => #131
        #129, #131 -> WithLatestFrom => #132
        BooleanProperty(Value=true) => #133
        #132, #133 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #135
          Expression:
            new (
            it.Item1.Item1 as RewardInfo,
            it.Item1.Item2 as Sequence,
            it.Item2 as TrialComplete
            )
        #125, #135 -> Take(Count=1)
        -> WorkflowOutput

        Disable SubscribeSubject SustainedSampleOnset => #138
        Disable SubscribeSubject SequenceInfo
        -> Disable MemberSelector(Selector=Item2.EnableTrialStartIndicator)
        -> Disable Condition => #141
            WorkflowInput Source1
            -> WorkflowOutput
        #138, #141 -> Disable WithLatestFrom
        -> Disable BooleanProperty(Value=true)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
        -> Disable MulticastSubject BehaviorCommands

        Disable SubscribeSubject SequenceInfo
        -> Disable MemberSelector(Selector=Item2.enableTrialEndIndicator)
        -> Disable Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
        -> Disable MulticastSubject BehaviorCommands
    -> SelectMany EndInitiation => #9
        WorkflowInput Source1 => #0
        -> StringProperty(Value=EndInitiation)
        -> MulticastSubject ExperimentEvents
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
        -> MulticastSubject BehaviorCommands => #6
        #6, #0 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition TrialValid
        WorkflowInput Source1
        -> MemberSelector(Selector=TrialComplete)
        -> WorkflowOutput
    -> SelectMany ActivateReward
        WorkflowInput Source1 => #0
        -> Condition RewardIndicatorsEnabled => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
            -> WorkflowOutput
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
        -> MulticastSubject BehaviorCommands => #4
        #1 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
        -> MulticastSubject BehaviorCommands => #7
        #4, #7 -> Merge
        -> BooleanProperty(Value=true) => #9
        #9, #1 -> Zip => #10
        #0 -> Condition RewardIndicatorsDisabled => #11
            WorkflowInput Source1
            -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #12
        #12, #11 -> Zip => #13
        #10, #13 -> Merge
        -> Take(Count=1)
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
        #1 -> StringProperty(Value=ActivateReward)
        -> MulticastSubject ExperimentEvents
    -> SelectMany AwaitReward
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject RewardInfo
        -> StringProperty(Value=AwaitReward)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject RewardPort0 => #5
        SubscribeSubject RewardInfo => #6
        #5, #6 -> WithLatestFrom => #7
        -> Condition R1 => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RewardTime)
        -> PropertyMapping(RewardTime) => #11
        #8, #11 -> DataSchema.RewardCommand(RewardTime=0.13, RewardPosition=0)
        -> MulticastSubject RewardCommand
        -> BooleanProperty(Value=true) => #14
        #7 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Condition MaxAttempts
            WorkflowInput Source1 => #0
            SubscribeSubject Attempts => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
            #3, #5 -> Zip
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #17
        SubscribeSubject RewardPort1 => #18
        SubscribeSubject RewardInfo => #19
        #18, #19 -> WithLatestFrom => #20
        -> Condition R2 => #21
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RewardTime)
        -> PropertyMapping(RewardTime) => #24
        #21, #24 -> DataSchema.RewardCommand(RewardTime=0.13, RewardPosition=1)
        -> MulticastSubject RewardCommand
        -> BooleanProperty(Value=true) => #27
        #20 -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition MaxAttempts
            WorkflowInput Source1 => #0
            SubscribeSubject Attempts => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
            #3, #5 -> Zip
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #30
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=RewardInfo.Item1)
        -> NullOrUnrewarded
        -> Condition NoReward
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #35
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence.ResponseTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=P1DT3H46M39S)
        -> BooleanProperty(Value=false) => #41
        SubscribeSubject SustainedSampleOnset => #42
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence.RewardAvailablePokeReset) => #44
        #42, #44 -> Zip
        -> Condition RewardPokeTrial
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #47
        #14, #17, #27, #30, #35, #41, #47 -> Merge => #48
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence) => #50
        #48, #50 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject RewardPort0 => #54
        SubscribeSubject RewardPort1 => #55
        #54, #55 -> Merge
        -> IntProperty(Value=1)
        -> Accumulate => #58
        IntProperty(Value=0) => #59
        #58, #59 -> Merge
        -> BehaviorSubject Attempts
    -> Sink UpdatePerformance => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialCorrectResult
        -> WorkflowOutput
    #9 -> Condition TrialInvalid
        WorkflowInput Source1
        -> MemberSelector(Selector=TrialComplete)
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector="TrialComplete,Sequence")
    -> Take(Count=1)
    -> Sink UpdatePerformance => #17
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialCorrectResult
        -> WorkflowOutput
    #13, #17 -> Merge
    -> MemberSelector(Selector=Item2)
    -> SelectMany Reset
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SequenceInfo

        SubscribeSubject SequenceInfo
        -> StringProperty(Value=Reset)
        -> MulticastSubject ExperimentEvents
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
        -> MulticastSubject BehaviorCommands
        -> StringProperty(Value=Zero)
        -> MulticastSubject OlfactometerCommand => #9
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=InterTrialInterval)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #13
        #9, #13 -> Delay(DueTime=PT0S)
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand
        -> Take(Count=1)
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Concat
-> Repeat

SubscribeSubject PerformanceAverage => #48
SubscribeSubject CurrentSequences => #49
#48, #49 -> WithLatestFrom
-> Condition CriterionMet
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1.Val0) => #1
    #0 -> MemberSelector(Selector=Item2.PerformaceCriterion) => #2
    #1, #2 -> Zip
    -> GreaterThanOrEqual
    -> WorkflowOutput
-> MemberSelector(Selector=Item2.NextSequence)
-> MulticastSubject LoadNewSequence

SubscribeSubject OlfactometerCommand
SubscribeSubject ExperimentEvents

ExternalizedMapping(Filter(DisplayName=EndSessionKey))
-> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 Control", SuppressRepetitions=false)
-> Take(Count=1)
-> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
-> MulticastSubject CommandsO0
-> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
-> MulticastSubject CommandsO1
-> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
-> MulticastSubject BehaviorCommands
-> StringProperty(Value=Default)
-> MulticastSubject OlfactometerCommand
-> WorkflowOutput

SubscribeSubject RewardCommand => #68
-> Condition R1
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardPosition)
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> IntProperty(Value=1) => #70
IntProperty(Value=0) => #71
#70, #71 -> Merge
-> Accumulate => #73
#68 -> Condition R2
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardPosition)
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> IntProperty(Value=1) => #75
#75, #71 -> Merge
-> Accumulate => #77
#73, #77 -> CombineLatest
-> Format(Format="R1: {0}, R2: {1}", Selector="Item1,Item2")

StringProperty(Value=Start)
-> BehaviorSubject ExperimentEvents
