<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:DataSchema;assembly=Extensions"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p3="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:p4="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Olfactometer.bonsai">
        <PortO0>COM10</PortO0>
        <EventsO0>EventsO0</EventsO0>
        <PortO1>COM13</PortO1>
        <EventsO1>EventsO1</EventsO1>
        <OlfactometerEvents>OlfactometerEvents</OlfactometerEvents>
        <SessionSettings>SessionSettings</SessionSettings>
        <OlfactometerCommand>OlfactometerCommand</OlfactometerCommand>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Behavior</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>BehaviorCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM14</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentSampleState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SampleOnset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SampleOnset</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SampleOffset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SampleOffset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentSampleState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RewardPort0</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RewardPort1</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:RewardCommand">
              <rx:Name>RewardCommand</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="SessionSettingsPath" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:LoadSessionSettings">
          <p2:Path>hypnose-session.yml</p2:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:CreateDiscreteUniform">
          <p3:Lower>0</p3:Lower>
          <p3:Upper>1</p3:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>BinaryDiscrete</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Default</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OlfactometerCommand</Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="p4:Unit">
        <rx:Name>StartSequence</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
        <rx:Name>RewardPosition</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RewardAvailable</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="InitiationKey" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>StartSequence</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>SequenceSelection</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartSequence</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Sequences</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentSequence</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SampleBinary</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BinaryDiscrete</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Sample" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>RewardCondition1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>SetRewardPosition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>RewardPosition</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.RewardCondition1</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>RewardCondition2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>SetRewardPosition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>RewardPosition</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.RewardCondition2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>TrialImplementation</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentTrial</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SamplePoke</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SampleOnset</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.MinimumSampleTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SampleOffset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>PerformTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:SampleValence" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>TrialElements</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>PresentCommand</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Command</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>OlfactometerCommand</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentSequence</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>PresentationTime</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.8S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Rewarded</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>RewardAvailable</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="10" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="7" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>InterCommand</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentSequence</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>InterCommand</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>OlfactometerCommand</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentSequence</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>InterCommandTime</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.2S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SampleOffset</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.SampleOffsetTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SampleOnset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:LastOrDefault" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="21" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="20" Label="Source1" />
            <Edge From="11" To="16" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Default</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OlfactometerCommand</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentSequence</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>InterTrialInterval</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT20S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>RewardAvailable</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>StartSequence</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RewardPort0</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardAvailable</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CreateRewardCommand</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.RewardTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RewardTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:RewardCommand">
                <p1:RewardTime>0.1</p1:RewardTime>
                <p1:RewardPosition>0</p1:RewardPosition>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RewardPort1</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardAvailable</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CreateRewardCommand</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.RewardTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RewardTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:RewardCommand">
                <p1:RewardTime>0.1</p1:RewardTime>
                <p1:RewardPosition>1</p1:RewardPosition>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>RewardCommand</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>RewardAvailable</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RewardAvailable</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RewardPosition</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OlfactometerCommand</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="30" Label="Source2" />
      <Edge From="27" To="34" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="33" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="37" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="52" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source2" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="63" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source2" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>